CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot containregexp "thumb")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "8")
    Name to assign these images:StarDist
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DAPI
    Name the output image:DAPIRescaled
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.0625
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
IdentifyPrimaryObjects:[module_num:6|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enabled:False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
    Select the input image:DAPIRescaled
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):6,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
ConvertImageToObjects:[module_num:7|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
    Select the input image:StarDist
    Name the output object:NucleiStarDist
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPIRescaled
    Name the output image:DAPIStarDistOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:NucleiStarDist

OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:Yes
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    Name the output image:DAPIStarDistOutline
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:NucleiStarDist

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:DAPIStarDistOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:StarDist
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder sub-folder|images\\g<Plate>\stardist
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:DAPIStarDistOutline
    Select method for constructing file names:From image filename
    Select image name for file prefix:StarDist
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline
    Saved file format:png
    Output file location:Default Output Folder sub-folder|images\\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToDatabase:[module_num:12|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:StarDist_example.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:NucleiStarDist
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:NucleiStarDist
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:Yes
    Enter the name of the group:Well
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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